CereStim matrix StimulationConfigurations= { Cathode%20First Number%20of%20pulses Phase%201%20amp%20(uA) Phase%202%20amp%20(uA) Phase%201%20duration%20(us) Phase%202%20duration%20(us) Frequency%20(Hz) Interphase%20duration%20(us) Train%20Duration%20(s) Train%20Frequency%20(Hz) } { Configuration%201 Configuration%202 Configuration%203 Configuration%204 Configuration%205 Configuration%206 Configuration%207 Configuration%208 Configuration%209 Configuration%2010 Configuration%2011 Configuration%2012 Configuration%2013 Configuration%2014 Configuration%2015 Configuration%2016 Configuration%2017 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8 8 8 8 // Configurations for BLAES PARAM SWEEP
Application matrix Stimuli= { caption icon av EarlyOffsetExpression StimulusDuration } 1 % C:\Paradigms\tasks\BLAES\BLAES_param_sweep\stimuli\cerestim_map.png % Keydown==32 600s // captions and icons to be displayed, sounds to be played for different stimuli
Application intlist Sequence= 1 1 
Application int SequenceType= 0 // Sequence of stimuli is 0 deterministic, 1 random, 2 P3Speller compatible (enumeration)
CereStim matrix StimulationTriggers= { Expression Config%20ID Electrode(s) } { Trigger%201 Trigger%202 Trigger%203 Trigger%204 Trigger%205 Trigger%206 Trigger%207 Trigger%208 Trigger%209 Trigger%2010 Trigger%2011 Trigger%2012 Trigger%2013 Trigger%2014 Trigger%2015 Trigger%2016 Trigger%2017 Trigger%2018 Trigger%2019 Trigger%2020 Trigger%2021 Trigger%2022 Trigger%2023 Trigger%2024 Trigger%2025 Trigger%2026 Trigger%2027 Trigger%2028 Trigger%2029 Trigger%2030 Trigger%2031 Trigger%2032 Trigger%2033 Trigger%2034 Trigger%2035 Trigger%2036 Trigger%2037 Trigger%2038 Trigger%2039 Trigger%2040 Trigger%2041 Trigger%2042 Trigger%2043 Trigger%2044 Trigger%2045 Trigger%2046 Trigger%2047 Trigger%2048 } Keydown%20==%20A Keydown%20==%20A Keydown%20==%20B Keydown%20==%20B Keydown%20==%20C Keydown%20==%20C Keydown%20==%20D Keydown%20==%20D Keydown%20==%20E Keydown%20==%20E Keydown%20==%20F Keydown%20==%20F Keydown%20==%20G Keydown%20==%20G Keydown%20==%20H Keydown%20==%20H Keydown%20==%20I Keydown%20==%20I Keydown%20==%20J Keydown%20==%20J Keydown%20==%20K Keydown%20==%20K Keydown%20==%20L Keydown%20==%20L Keydown%20==%20M Keydown%20==%20M Keydown%20==%20N Keydown%20==%20N Keydown%20==%20O Keydown%20==%20O Keydown%20==%20P Keydown%20==%20P Keydown%20==%20Q Keydown%20==%20Q Keydown%20==%20R Keydown%20==%20R Keydown%20==%20S Keydown%20==%20S Keydown%20==%20T Keydown%20==%20T Keydown%20==%20U Keydown%20==%20U Keydown%20==%20V Keydown%20==%20V Keydown%20==%20W Keydown%20==%20W Keydown%20==%20X Keydown%20==%20X 1 13 1 13 2 14 2 14 3 15 3 15 4 16 4 16 5 17 5 17 6 18 6 18 7 19 7 19 8 20 8 20 9 21 9 21 10 22 10 22 11 23 11 23 12 24 12 24 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 // Trigger Library for BLAES PARAM SWEEP
CereStim int DynamicConfiguration= 1 0 0 1 
CereStim string StartExpression= Keydown==13 // BCI2000 expression to start stim
