Application:AudioPlayback int AudioPlaybackOn= auto 0 0 1 // switch audio playback on
Application:AudioPlayback float AudioPlaybackRate= auto // audio playback sampling rate
Application:AudioPlayback int AudioPlaybackChannels= auto // number of playback output channels
Application:AudioPlayback float AudioPlaybackBufferDuration= auto // duration of playback buffer
Application:Sequencing intlist Sequence= 80 28 128 36 136 18 118 24 124 16 116 11 111 35 135 17 117 19 119 14 114 29 129 32 132 37 137 12 112 21 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6 106 26 126 // Sequence in which stimuli are presented (deterministic mode)/ Stimulus frequencies for each stimulus (random mode)/ Ignored (P3Speller compatible mode)
Application:Sequencing int SequenceType= 0 0 0 2 // Sequence of stimuli is 0 deterministic, 1 random, 2 P3Speller compatible (enumeration)
Application:Sequencing int NumberOfSequences= 1 1 0 % // number of sequence repetitions
Application:Sequencing intlist ToBeCopied= 3 1 2 3 1 1 % // Sequence in which stimuli need to be copied (only used in copy mode)
Application:Sequencing string UserComment= Mood%20Induction%20Video%20Task // User comments for a specific run
Application:Stimuli matrix Stimuli= { caption icon audio %20 Repeat CaptionColor EarlyOffsetExpression StimulusDuration ValenceNorm ArousalNorm } { 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 30 31 32 33 34 35 36 37 38 39 40 % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % % 101 102 103 104 105 106 107 108 109 110 111 112 113 114 115 116 117 118 119 120 121 122 123 124 125 126 127 128 129 130 131 132 133 134 135 136 137 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-1 -1 -1 -1 // captions and icons to be displayed, av media to be played for different stimuli
Application:Stimuli matrix FocusOn= { caption icon av } { focuson } Please%20focus%20on images\focuson.bmp sounds\uh-uh.wav // initial announcement what to focus on
Application:Stimuli matrix Result= { caption icon av } { result } The%20result%20was images\result.bmp sounds\uh-uh.wav // final result announcement 
Application:Stimuli int StimulusWidth= 70 0 0 100 // StimulusWidth in percent of screen width (zero for original pixel size)
Application:Stimuli int CaptionHeight= 8 0 0 100 // Height of stimulus caption text in percent of screen height
Application:Stimuli string CaptionColor= 0x000000 0x00FFFFFF 0x00000000 0xFFFFFFFF // Color of stimulus caption text (color)
Application:Stimuli string BackgroundColor= 0xFFFFFF 0x00FFFF00 0x00000000 0xFFFFFFFF // Color of stimulus background (color)
Application:Stimuli int CaptionSwitch= 0 1 0 1 // Present captions (boolean)
Application:Stimuli int IconSwitch= 1 1 0 1 // Present icon files (boolean)
Application:Stimuli int AVSwitch= 1 0 0 1 // Present media files (boolean)
Application:Stimuli float AudioVolume= 100 100 0 % // Volume for audio playback in percent
Application:Stimuli int AVPlayToEnd= 1 1 0 1 // Never abort playback of media files (boolean)
Application:Stimuli int AudioSwitch= 0 1 0 1 // Present audio files (boolean)(superseded by AVSwitch)
Application:Stimuli int TestAllStimuli= 0 1 0 1 // Load all stimuli during preflight phase, even if not presented (boolean)
